# Crystal energy response R(E_true -> E_meas).
# Mono-energetic pencil beam into a bare NaI crystal slab; TsEDepSpectrum records
# the total energy deposited per incident photon. Change BeamEnergy and the crystal
# material/thickness to characterize any crystal at any line.

i:Ts/NumberOfThreads = 0

sv:Ma/NaI/Components = 2 "Sodium" "Iodine"
uv:Ma/NaI/Fractions  = 2 0.1534 0.8466
d:Ma/NaI/Density     = 3.67 g/cm3

sv:Ph/Default/Modules      = 1 "g4em-penelope"
b:Ph/Default/Fluorescence  = "True"
b:Ph/Default/Auger         = "True"
b:Ph/Default/PIXE          = "True"
d:Ph/Default/CutForGamma    = 0.01 mm
d:Ph/Default/CutForElectron = 0.01 mm

d:Ge/World/HLX = 200. mm
d:Ge/World/HLY = 200. mm
d:Ge/World/HLZ = 200. mm
s:Ge/World/Material = "Vacuum"

s:Ge/Crystal/Type     = "TsBox"
s:Ge/Crystal/Parent   = "World"
s:Ge/Crystal/Material = "NaI"
d:Ge/Crystal/HLX = 100. mm
d:Ge/Crystal/HLY = 100. mm
d:Ge/Crystal/HLZ = 4.75 mm          # 9.5 mm thick
d:Ge/Crystal/TransZ = 0. mm

s:Ge/Src/Type = "TsBox"
s:Ge/Src/Parent = "World"
s:Ge/Src/Material = "Vacuum"
d:Ge/Src/HLX = 0.01 mm
d:Ge/Src/HLY = 0.01 mm
d:Ge/Src/HLZ = 0.01 mm
d:Ge/Src/TransZ = -20. mm

s:So/Beam/Type = "Beam"
s:So/Beam/Component = "Src"
s:So/Beam/BeamParticle = "gamma"
d:So/Beam/BeamEnergy = 140.5 keV
u:So/Beam/BeamEnergySpread = 0.0
s:So/Beam/BeamPositionDistribution = "None"
s:So/Beam/BeamAngularDistribution  = "None"
i:So/Beam/NumberOfHistoriesInRun = 1000000

s:Sc/Spec/Quantity   = "EDepSpectrum"
s:Sc/Spec/Component  = "Crystal"
s:Sc/Spec/OutputType = "ASCII"
s:Sc/Spec/OutputFile = "energy_response_NaI_140p5keV"
s:Sc/Spec/IfOutputFileAlreadyExists = "Overwrite"
b:Ts/PauseBeforeQuit = "False"
