# Design example: multi-pinhole collimator (3 x 3).
# Same TsPinholeCollimator, with NPinholesX/Y > 1 on a grid at PinholePitch. Each pinhole forms its
# own projection; keep the plate large to avoid bypass. Set FocalLength to aim the pinholes at a
# common focus (converging multi-pinhole).
# Run from this example's folder: topas multipinhole.txt

i:Ts/NumberOfThreads = 1
b:Ge/QuitIfOverlapDetected = "True"

sv:Ma/Lead/Components = 1 "Lead"
uv:Ma/Lead/Fractions  = 1 1.0
d:Ma/Lead/Density     = 11.35 g/cm3
sv:Ma/NaI/Components = 2 "Sodium" "Iodine"
uv:Ma/NaI/Fractions  = 2 0.1534 0.8466
d:Ma/NaI/Density     = 3.67 g/cm3

sv:Ph/Default/Modules = 1 "g4em-penelope"
b:Ph/Default/Fluorescence = "True"

d:Ge/World/HLX = 300. mm
d:Ge/World/HLY = 300. mm
d:Ge/World/HLZ = 400. mm
s:Ge/World/Material = "Vacuum"

s:Ge/Collim/Type           = "TsPinholeCollimator"
s:Ge/Collim/Parent         = "World"
s:Ge/Collim/Material       = "Lead"
d:Ge/Collim/PlateThickness  = 7.0 mm
d:Ge/Collim/PinholeDiameter = 2.0 mm
i:Ge/Collim/NPinholesX = 3
i:Ge/Collim/NPinholesY = 3
d:Ge/Collim/PinholePitch = 20. mm
d:Ge/Collim/PlateHLX = 150. mm
d:Ge/Collim/PlateHLY = 150. mm
# d:Ge/Collim/FocalLength = 60. mm      # uncomment to aim the 9 pinholes at a common object focus
d:Ge/Collim/TransZ = 0. mm

s:Ge/Crystal/Type     = "TsBox"
s:Ge/Crystal/Parent   = "World"
s:Ge/Crystal/Material = "NaI"
d:Ge/Crystal/HLX = 120. mm
d:Ge/Crystal/HLY = 120. mm
d:Ge/Crystal/HLZ = 4.75 mm
d:Ge/Crystal/TransZ = 100. mm

s:Ge/Src/Type = "TsBox"
s:Ge/Src/Parent = "World"
s:Ge/Src/Material = "Vacuum"
d:Ge/Src/HLX = 0.01 mm
d:Ge/Src/HLY = 0.01 mm
d:Ge/Src/HLZ = 0.01 mm
d:Ge/Src/TransZ = -50. mm
s:So/Beam/Type = "Isotropic"
s:So/Beam/Component = "Src"
s:So/Beam/BeamParticle = "gamma"
d:So/Beam/BeamEnergy = 140.5 keV
i:So/Beam/NumberOfHistoriesInRun = 2000000

s:Sc/Spec/Quantity   = "EDepSpectrum"
s:Sc/Spec/Component  = "Crystal"
s:Sc/Spec/OutputType = "ASCII"
s:Sc/Spec/OutputFile = "multipinhole"
s:Sc/Spec/IfOutputFileAlreadyExists = "Overwrite"
b:Ts/PauseBeforeQuit = "False"
