# GE Discovery NM/CT 870 CZT, WEHR (Wide-Energy High-Resolution) tungsten SQUARE-hole
# collimator + CZT crystal.
# Geometry (square holes, hole = side/flat-to-flat): 2.26 / 0.2 / 45 mm; pitch 2.46 mm.
# Source: Ito et al. 2021, JACMP 22(2):165-177 (Table 1); GE 870 CZT datasheet (CZT 7.25 mm).
# Reliability B. Evidence: research/knowledge/spect-collimator-geometry/.
#
# IncludeFile fragment (see systems/README.md). Include exactly one preset per deck. The deck
# adds World, physics, source, scorer, detector extents and the Z placements below.
# Detector pixelation: 2.46 mm CZT pixels -> set Ge/Crystal/XBins,YBins to the pixel pitch.
# Recommended placement (front collimator face at z = 0):
#   d:Ge/Collim/TransZ  = 22.5 mm       # CollimatorLength / 2
#   d:Ge/Crystal/TransZ = 48.875 mm     # 0.25 mm gap behind the collimator back face
# Photopeak windows (post-processing): Tc-99m 140.5; Lu-177 208/113 keV (wide-energy CZT range).

# --- Collimator septa: tungsten ---
sv:Ma/Tungsten/Components = 1 "Tungsten"
uv:Ma/Tungsten/Fractions  = 1 1.0
d:Ma/Tungsten/Density     = 19.3 g/cm3

# --- Crystal: cadmium zinc telluride (CZT) ---
sv:Ma/CZT/Components = 3 "Cadmium" "Zinc" "Tellurium"
uv:Ma/CZT/Fractions  = 3 0.4632 0.0300 0.5068
d:Ma/CZT/Density     = 5.78 g/cm3

# --- Collimator geometry (square holes on a square lattice) ---
s:Ge/Collim/Type             = "TsParallelHoleCollimator"
s:Ge/Collim/Parent           = "World"
s:Ge/Collim/Material         = "Tungsten"
d:Ge/Collim/HoleDiameter     = 2.26 mm
d:Ge/Collim/SeptalThickness  = 0.2 mm
d:Ge/Collim/CollimatorLength = 45.0 mm
s:Ge/Collim/HoleShape        = "Square"
s:Ge/Collim/Lattice          = "Square"
s:Ge/Collim/Hole/Material    = "Vacuum"

# --- Crystal geometry (CZT, 7.25 mm thick) ---
s:Ge/Crystal/Type     = "TsBox"
s:Ge/Crystal/Parent   = "World"
s:Ge/Crystal/Material = "CZT"
d:Ge/Crystal/HLZ      = 3.625 mm        # 7.25 mm thick
