# GE Anger family, LEHR (Low-Energy High-Resolution) collimator + NaI crystal.
# Applies to GE Infinia/InfiniaVC, Millennium VG, Discovery NM/CT 670(Pro)/630,
# Optima NM/CT 640, Discovery NM/CT 870 (NaI mode), shared GE Anger collimator catalog.
# Geometry (hexagonal, hole diameter = flat-to-flat): 1.5 / 0.2 / 35 mm.
# Sources: GE Infinia Product Data (Dir 2411980-100 Rev3); Sawant 2025 JNMT 53:30-35;
# Pandey 2015 IJNM 30:128-134. Reliability A. Evidence: research/knowledge/spect-collimator-geometry/.
#
# IncludeFile fragment (see systems/README.md). Include exactly one preset per deck. The deck
# adds World, physics, source, scorer, detector extents (NHolesX/Y, Crystal HLX/HLY, XBins/YBins)
# and the Z placements below.
# Recommended placement (front collimator face at z = 0):
#   d:Ge/Collim/TransZ  = 17.5 mm       # CollimatorLength / 2
#   d:Ge/Crystal/TransZ = 40.0 mm       # 0.25 mm gap behind the collimator back face
# Photopeak window (post-processing): Tc-99m 140.5 keV, 20% -> 126.5-154.6 keV.

# --- Collimator septa: lead ---
sv:Ma/Lead/Components = 1 "Lead"
uv:Ma/Lead/Fractions  = 1 1.0
d:Ma/Lead/Density     = 11.35 g/cm3

# --- Crystal: sodium iodide ---
sv:Ma/NaI/Components = 2 "Sodium" "Iodine"
uv:Ma/NaI/Fractions  = 2 0.1534 0.8466
d:Ma/NaI/Density     = 3.67 g/cm3

# --- Collimator geometry (LEHR, hexagonal holes on a hex lattice) ---
s:Ge/Collim/Type             = "TsParallelHoleCollimator"
s:Ge/Collim/Parent           = "World"
s:Ge/Collim/Material         = "Lead"
d:Ge/Collim/HoleDiameter     = 1.5 mm
d:Ge/Collim/SeptalThickness  = 0.2 mm
d:Ge/Collim/CollimatorLength = 35.0 mm
s:Ge/Collim/HoleShape        = "Hex"
s:Ge/Collim/Lattice          = "Hex"
s:Ge/Collim/Hole/Material    = "Vacuum"

# --- Crystal geometry (NaI, 9.5 mm thick; 1" = 25.4 mm option exists) ---
s:Ge/Crystal/Type     = "TsBox"
s:Ge/Crystal/Parent   = "World"
s:Ge/Crystal/Material = "NaI"
d:Ge/Crystal/HLZ      = 4.75 mm         # 9.5 mm thick
