# Siemens Symbia, LEHR (Low-Energy High-Resolution) collimator + NaI crystal.
# Validated: absolute LEHR sensitivity 8.6e-5 vs published 9.1e-5 counts/decay at 10 cm
# (ratio 0.95); see docs/validation.md.
# Geometry (hex, flat-to-flat) 1.11/0.16/24.05 mm. Sources: Dong 2018 (MCNP5, Symbia T);
# Rodrigues 2007 (Geant4, e.cam); Asmi 2019. Reliability B (Siemens collimator geometry is
# vendor-proprietary; published values are third-party MC reconstructions).
# See research/knowledge/spect-collimator-geometry/.
#
# IncludeFile fragment. Defines materials + Ge/Collim (hole/septum/length) + Ge/Crystal
# (material + thickness). The including deck must add World, physics, source, scorer, the
# detector extents (NHolesX/Y, Crystal HLX/HLY, XBins/YBins) and the Z placements below.
# See systems/README.md for the full contract. Include exactly one preset per deck.
#
# Recommended placement (front collimator face at z = 0):
#   d:Ge/Collim/TransZ  = 12.025 mm     # CollimatorLength / 2
#   d:Ge/Crystal/TransZ = 29.05 mm      # 0.25 mm gap behind the collimator back face
# Photopeak window (apply in post-processing): Tc-99m 140.5 keV, 20% -> 126.5-154.6 keV.
# Fast-path (TsForcedDetectionProjection) collimator numbers:
#   HoleDiameter 1.11 mm, SeptalThickness 0.16 mm, CollimatorLength 24.05 mm.

# --- Collimator septa: lead ---
sv:Ma/Lead/Components = 1 "Lead"
uv:Ma/Lead/Fractions  = 1 1.0
d:Ma/Lead/Density     = 11.35 g/cm3

# --- Crystal: sodium iodide ---
sv:Ma/NaI/Components = 2 "Sodium" "Iodine"
uv:Ma/NaI/Fractions  = 2 0.1534 0.8466
d:Ma/NaI/Density     = 3.67 g/cm3

# --- Collimator geometry (LEHR) ---
s:Ge/Collim/Type             = "TsParallelHoleCollimator"
s:Ge/Collim/Parent           = "World"
s:Ge/Collim/Material         = "Lead"
d:Ge/Collim/HoleDiameter     = 1.11 mm
d:Ge/Collim/SeptalThickness  = 0.16 mm
d:Ge/Collim/CollimatorLength = 24.05 mm
s:Ge/Collim/Hole/Material    = "Vacuum"

# --- Crystal geometry (NaI, 9.5 mm thick) ---
s:Ge/Crystal/Type     = "TsBox"
s:Ge/Crystal/Parent   = "World"
s:Ge/Crystal/Material = "NaI"
d:Ge/Crystal/HLZ      = 4.75 mm         # 9.5 mm thick
