# Siemens Symbia, LPHR (Low/Medium-energy, I-123) collimator + NaI crystal.
# !! UNCITED / UNVERIFIED (reliability D): the geometry 1.5/0.2/35 mm was NOT found in any
# openable source during the 2026-07-01 literature sweep. It originated from an internal handoff.
# DECISION: kept as a provisional preset, but it MUST be disclosed as uncited in the documentation
# (readthedocs) and the companion paper. Candidate source to close the gap: Tunninen et al. 2017,
# DOI 10.1007/978-981-10-5122-7_62 (tabulates Siemens LEHR/LEUHR/MELP; paywalled).
#
# IncludeFile fragment. Defines materials + Ge/Collim (hole/septum/length) + Ge/Crystal
# (material + thickness). The including deck must add World, physics, source, scorer, the
# detector extents (NHolesX/Y, Crystal HLX/HLY, XBins/YBins) and the Z placements below.
# See systems/README.md for the full contract. Include exactly one preset per deck.
#
# Recommended placement (front collimator face at z = 0):
#   d:Ge/Collim/TransZ  = 17.5 mm       # CollimatorLength / 2
#   d:Ge/Crystal/TransZ = 40.0 mm       # 0.25 mm gap behind the collimator back face
# Photopeak window (apply in post-processing): I-123 159 keV, 20% -> 143.1-174.9 keV.
# Fast-path (TsForcedDetectionProjection) collimator numbers:
#   HoleDiameter 1.5 mm, SeptalThickness 0.2 mm, CollimatorLength 35.0 mm.

# --- Collimator septa: lead ---
sv:Ma/Lead/Components = 1 "Lead"
uv:Ma/Lead/Fractions  = 1 1.0
d:Ma/Lead/Density     = 11.35 g/cm3

# --- Crystal: sodium iodide ---
sv:Ma/NaI/Components = 2 "Sodium" "Iodine"
uv:Ma/NaI/Fractions  = 2 0.1534 0.8466
d:Ma/NaI/Density     = 3.67 g/cm3

# --- Collimator geometry (LPHR) ---
s:Ge/Collim/Type             = "TsParallelHoleCollimator"
s:Ge/Collim/Parent           = "World"
s:Ge/Collim/Material         = "Lead"
d:Ge/Collim/HoleDiameter     = 1.5 mm
d:Ge/Collim/SeptalThickness  = 0.2 mm
d:Ge/Collim/CollimatorLength = 35.0 mm
s:Ge/Collim/Hole/Material    = "Vacuum"

# --- Crystal geometry (NaI, 9.5 mm thick) ---
s:Ge/Crystal/Type     = "TsBox"
s:Ge/Crystal/Parent   = "World"
s:Ge/Crystal/Material = "NaI"
d:Ge/Crystal/HLZ      = 4.75 mm         # 9.5 mm thick
