# Siemens Symbia, ME / MELP (Medium-Energy, Lu-177) collimator + NaI crystal.
# Geometry (hex, flat-to-flat) 2.94/1.14/40.64 mm. Sources: Benabdallah 2021 (Symbia T6, Table 3);
# Shahmari 2019; Asmi 2019. Reliability B (Siemens geometry is proprietary; third-party MC values).
# See research/knowledge/spect-collimator-geometry/.
#
# IncludeFile fragment. Defines materials + Ge/Collim (hole/septum/length) + Ge/Crystal
# (material + thickness). The including deck must add World, physics, source, scorer, the
# detector extents (NHolesX/Y, Crystal HLX/HLY, XBins/YBins) and the Z placements below.
# See systems/README.md for the full contract. Include exactly one preset per deck.
#
# Recommended placement (front collimator face at z = 0):
#   d:Ge/Collim/TransZ  = 20.32 mm      # CollimatorLength / 2
#   d:Ge/Crystal/TransZ = 45.64 mm      # 0.25 mm gap behind the collimator back face
# Photopeak windows (apply in post-processing): Lu-177 208 keV (20% -> 187-229 keV)
#   and 113 keV (20% -> 102-124 keV).
# Fast-path (TsForcedDetectionProjection) collimator numbers:
#   HoleDiameter 2.94 mm, SeptalThickness 1.14 mm, CollimatorLength 40.64 mm.

# --- Collimator septa: lead ---
sv:Ma/Lead/Components = 1 "Lead"
uv:Ma/Lead/Fractions  = 1 1.0
d:Ma/Lead/Density     = 11.35 g/cm3

# --- Crystal: sodium iodide ---
sv:Ma/NaI/Components = 2 "Sodium" "Iodine"
uv:Ma/NaI/Fractions  = 2 0.1534 0.8466
d:Ma/NaI/Density     = 3.67 g/cm3

# --- Collimator geometry (ME / MELP) ---
s:Ge/Collim/Type             = "TsParallelHoleCollimator"
s:Ge/Collim/Parent           = "World"
s:Ge/Collim/Material         = "Lead"
d:Ge/Collim/HoleDiameter     = 2.94 mm
d:Ge/Collim/SeptalThickness  = 1.14 mm
d:Ge/Collim/CollimatorLength = 40.64 mm
s:Ge/Collim/Hole/Material    = "Vacuum"

# --- Crystal geometry (NaI, 9.5 mm thick) ---
s:Ge/Crystal/Type     = "TsBox"
s:Ge/Crystal/Parent   = "World"
s:Ge/Crystal/Material = "NaI"
d:Ge/Crystal/HLZ      = 4.75 mm         # 9.5 mm thick
